<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-ctp2">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q4="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q1="clr-namespace:Bonsai.Video;assembly=Bonsai.Video" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:VideoCaptureDevice">
          <q1:Index>0</q1:Index>
          <q1:Format>
            <q1:FrameSize>
              <q1:Width>1024</q1:Width>
              <q1:Height>768</q1:Height>
            </q1:FrameSize>
            <q1:AverageFrameRate>30</q1:AverageFrameRate>
            <q1:MaximumFrameRate>30</q1:MaximumFrameRate>
            <q1:BitCount>24</q1:BitCount>
          </q1:Format>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>C:\Users\Sandown Scientific\Desktop\Kacper\MartaW_dosw\MartaW_dosw.avi</q2:FileName>
          <q2:Suffix>Timestamp</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>false</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>30</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:KeyDown">
          <q3:Filter>S</q3:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SkipUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="First" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Behavioral Paradigm</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Delay">
                <DueTime>PT1M20S</DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:SerialStringWrite">
                <q4:PortName>COM12</q4:PortName>
                <q4:NewLine>a\n</q4:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Delay">
                <DueTime>PT1M20S</DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:SerialStringWrite">
                <q4:PortName>COM12</q4:PortName>
                <q4:NewLine>a\n</q4:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Delay">
                <DueTime>PT1M20S</DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:SerialStringWrite">
                <q4:PortName>COM12</q4:PortName>
                <q4:NewLine>a\n</q4:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Delay">
                <DueTime>PT1M20S</DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:SerialStringWrite">
                <q4:PortName>COM12</q4:PortName>
                <q4:NewLine>a\n</q4:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Delay">
                <DueTime>PT1M20S</DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:SerialStringWrite">
                <q4:PortName>COM12</q4:PortName>
                <q4:NewLine>a\n</q4:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Delay">
                <DueTime>PT1M20S</DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:SerialStringWrite">
                <q4:PortName>COM12</q4:PortName>
                <q4:NewLine>a\n</q4:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Delay">
                <DueTime>PT1M20S</DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:SerialStringWrite">
                <q4:PortName>COM12</q4:PortName>
                <q4:NewLine>a\n</q4:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Delay">
                <DueTime>PT1M20S</DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:SerialStringWrite">
                <q4:PortName>COM12</q4:PortName>
                <q4:NewLine>a\n</q4:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Delay">
                <DueTime>PT1M20S</DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:SerialStringWrite">
                <q4:PortName>COM12</q4:PortName>
                <q4:NewLine>a\n</q4:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Delay">
                <DueTime>PT1M20S</DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:SerialStringWrite">
                <q4:PortName>COM12</q4:PortName>
                <q4:NewLine>a\n</q4:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Delay">
                <DueTime>PT2M</DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>22</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>14</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>15</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>16</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>18</From>
              <To>17</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>19</From>
              <To>18</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>20</From>
              <To>19</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>21</From>
              <To>20</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>3</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>5</To>
        <Label>Source2</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Video.VideoCaptureDevice, Bonsai.Video, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Windows.Input.KeyDown, Bonsai.Windows.Input, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SkipUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.First, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Delay, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.SerialStringWrite, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>